<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Medtronic StealthLink tracker + BK5000 (via pyIGTLink) for Image Calibration"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)"
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="128.16.0.2"
      ServerPort="6996"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" AlwaysTrack="TRUE"/>
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame"  />
        <DataSource Type="Tool" Id="Ras"      PortName="RasRegistration" />
	      <DataSource Type="Tool" Id="SureTrack2"      PortName="SureTrak2 Black Passive" AlwaysTrack="TRUE"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource  Id="SureTrack2" />
          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
<!-- LocalTimeOffsetSec="0.0" -->
    <Device
    Id="OpenIGTLinkVideoSenderDevice"
    Type="OpenIGTLinkVideo"
    MessageType="Image"
    ServerAddress="127.0.0.1"
    ServerPort="18905"
    IgtlMessageCrcCheckEnabled="false" >
    <DataSources>
      <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
    </DataSources>
    <OutputChannels>
      <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
    </OutputChannels>
  </Device>

  <Device
    Id="TrackedVideoDevice"
    Type="VirtualMixer"
    BaseFilename="RecordingTest.mha"
    EnableCapturingOnStart="FALSE" >
    <InputChannels>
      <InputChannel Id="VideoStream" />
      <InputChannel Id="TrackerStream" />
    </InputChannels>
    <OutputChannels>
      <OutputChannel Id="TrackedVideoStream"/>
    </OutputChannels>
  </Device>

  <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>


	<Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Reference">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        Interpolation="LINEAR" Optimization="NONE" Compounding="On" FillHoles="On" NumberOfThreads="2"
		ClipRectangleOrigin="0 0" ClipRectangleSize="820 726"
        OutputOrigin="0 0 0" OutputSpacing="0.5 0.5 0.5">
		        <HoleFilling>
          <HoleFillingElement
            Type="STICK"
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
        </HoleFilling>
		</VolumeReconstruction>
    </Device>
 
</DataCollection>

  <CoordinateDefinitions>
<!-- 
	<Transform From="Image" To="SureTrack2Tip"
	Matrix="
	-0.0614524 -0.000590372 -0.00299226 27.1976 
	-0.00298393 -0.000853928 0.0614497 1.57 
	-0.000631149 0.0615193 0.000824247 2.5 
	0 0 0 1 
	" />  
 -->
 
 <!-- ImageToSureTrackTip @ 4.5cm 
 -0.0640225 -0.00644543 -0.00560506 30.4624 
-0.00582192 0.00191411 0.0642984 8.2935 
-0.00625024 0.0642389 -0.00247827 -1.94724 
0 0 0 1 

	ImageToSureTrackTip @ 3.5cm
-0.0435662 -0.000407961 0.00460543 21.8348 
0.00455396 0.00375201 0.0434117 2.41274 
-0.000798657 0.043648 -0.00368865 1.97602 
0 0 0 1 
	
	ImageToSureTrackTip @ 6cm
-0.074818 -0.00291639 -0.0104303 40.8592 
-0.0108259 0.0222327 0.071439 -6.08589 
0.000311511 0.0721958 -0.022421 2.54638 
0 0 0 1 

-->
	<Transform From="Image" To="Reference"
	Matrix="
	1 0 0 0 
	0 1 0 0
	0 0 1 0
	0 0 0 1 
	" /> 

	<Transform From="SureTrack2Tip" To="SureTrack2"
	Matrix="
0.999884 0 -0.0152069 -3.00666 
-0.0151821 -0.0571077 -0.998253 -109.564 
-0.000868431 0.998368 -0.0571011 -45.7899 
0 0 0 1 

	" /> 
	
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0
         0  0  0  1" />


  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="TrackedVideoStream"
    SendValidTransformsOnly="true"> <!--On the US config file-->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="STRING" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToReference" />
        <Transform Name="SureTrack2ToRas"  />
		<Transform Name="SureTrack2ToReference"  />
		<Transform Name="StylusToSureTrack2Tip"  />
		<Transform Name="SureTrack2TipToSureTrack2"  />
		<Transform Name="ReferenceToRas" />
       <!-- <Transform Name="StylusToRas"  /> -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
      <StringNames>
        <String Name="DepthMm" />
        <String Name="PixelSpacingMm" />
        <String Name="TransducerOriginPix" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
